# Generated by Configurator on Mon Feb 17 13:49:29 CET 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,TIScope,NikonTI,TIScope
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0

# Roles
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

